OpenViBE-Scenario
Comment
  Aquisition client can be used if
  running scenario with live data.
Comment
  Configure the Stimulations box:

   Set stimulation path before use !

  Enter the path to "one_eye_stim.txt"
Comment
  Configure the Matlab Scripting box:

   Set the matlab executable path before use !

  Enter the path to your local Matlab installation.

Acquisition client
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024

Generic stream reader => #1
  Filename = C:/Users/Adam/Downloads/test_[5b2014.12.03-14.57.11]5d.ov
Data=#1 -> Signal display "Raw Output"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Keyboard stimulator => #3
  Filename = C:/Users/Adam/Documents/GitHub/Brain-scanner-device/Scenarios/One_Eye/one_eye_stim.txt
Signal=#1, Stimulation=#3 -> Matlab Scripting
  Box clock frequency in Hz = 64
  Matlab executable (path) = C:/Program Files (x86)/MATLAB/R2015b/bin/win32/matlab.exe
  Matlab working directory = C:/Users/Adam/Documents/GitHub/Brain-scanner-device/Scenarios/One_Eye
  Initialize function = one_eye_trainer_Initialize
  Process function = one_eye_trainer
  Uninitialize function = one_eye_trainer_Uninitialize
